CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "_thumb")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^.*_(?P<Row>[A-Z]{1,2})(?P<Col>[0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Row
    Metadata category:Col

CorrectIlluminationCalculate:[module_num:5|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notes:['Correct illumination for nuclei. Necessary for correct ID of G1/G2 nuclei']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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Correct illumination of EdU. Useful for setting background illumination']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
    Select the input image:GFP
    Name the output image:IllumGFP
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['Apply all the corrected illumination']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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Select the input image:GFP
    Name the output image:CorrGFP
    Select the illumination function:IllumGFP
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:8|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notes:['Identify nuclei based on Hoechst/DNA']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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:5000
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:3.0
    Lower and upper bounds on threshold:0.01,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ExpandOrShrinkObjects:[module_num:9|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enabled:False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
    Select the input objects:Nuclei
    Name the output objects:Cells
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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    Retain the outlines of the identified objects?:No
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
MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:CorrGFP
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|Y:\\\\\\\\overexpression\\\\\\\\190912_BacMam_Echo_1536
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :Image|Count_Nuclei,Image|FileName_DNA,Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Well,Image|Metadata_ChannelNumber,Image|Metadata_Col,Image|Metadata_Row,Nuclei|Intensity_UpperQuartileIntensity_CorrGFP,Nuclei|Intensity_IntegratedIntensity_CorrGFP,Nuclei|Intensity_MaxIntensity_CorrGFP,Nuclei|Intensity_MeanIntensity_CorrGFP,Nuclei|Number_Object_Number,Nuclei|Location_Center_Y,Nuclei|Location_Center_X,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,Experiment|Modification_Timestamp,Experiment|Metadata_GroupingTags
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:BacMam_384_
    Overwrite existing files without warning?:No
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